PsychoPy2experiment version="2022.2.1"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [707, 567]
  expName = moveObjByMouseOrKeys_ns
  keyboardBackend = ioHub
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Routines
  Routine trial
  Routine drapScr
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        initialPos1 = (-0.2,0)
        initialPos2 = (0.2,0)
      Begin Routine:
        picked_rect = rect

        move_step = 0.05


        rect.pos  =  initialPos1
        tri.pos  =  initialPos2
      Each Frame:
        if mouse.isPressedIn(rect):

            picked_rect = rect
            picked_rect.pos = mouse.getPos()
        elif mouse.isPressedIn(tri):
            picked_rect = tri
            picked_rect.pos = mouse.getPos()
        else:
            picked_rect.pos= np.around(picked_rect.pos, decimals=1)


        if key_control.getKeys(keyList=["up"]):
           picked_rect.pos = picked_rect.pos + (0, 0.1)
        elif key_control.getKeys(keyList=["down"]):
           picked_rect.pos = picked_rect.pos - (0, 0.1)
        elif key_control.getKeys(keyList=["left"]):
           picked_rect.pos = picked_rect.pos-  (0.1, 0)
        elif key_control.getKeys(keyList=["right"]):
           picked_rect.pos = picked_rect.pos+  (0.1, 0)


        picked_rect.draw()
    PolygonComponent rect
      fillColor = white
      pos = (-0.2, 0)
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent tri
      fillColor = white
      pos = (0.2, 0)
      shape = triangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = text_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent text_next
      letterHeight = 0.05
      pos = (0, -0.300)
      startVal [time (s)] = 0.0
      text = next
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    KeyboardComponent key_control
      allowedKeys = 'up','down','left','right'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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  Routine fix
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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      text:
        +
Flow
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine fix
    Routine drapScr
  LoopTerminator trials
